opentrons/protocol-designer 1.1.1
protocol-schema: 1.0.0
protocol-name: ART
author: Tim Dobbs, Counter Culture Labs, and artists
description: Recipe to make agar art from submissions
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  main_pipette: {name: p300_single, model: p300_single_v1.3, mount: left}
  left: {mount: left}
labware:
  Trash: {model: fixed-trash, slot: 12}
  tiprack 200ul: {model: tiprack-200ul, slot: 6}
  6 well "pallete" plate: {model: 6-well-plate, slot: 3}
  tiprack-200ul: {location: 6}
  12-well-plate: {location: 3}
  384-plate: {location: 5}
pipetteTiprackAssignments:
  left: tiprack-200ul
ingredients:
  - green: {description: Green Dye}
  - blue: {description: Blue Dye}
ingredLocations:
  12-well-plate:
    green {volume: 6900}: A1
    blue {volume: 6900}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: left
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: 12-well-plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 384-plate
  dispense_wells: O24, P24
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: left
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: 12-well-plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 384-plate
  dispense_wells: O23, P23, M24, N24
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 10
  blowout_location: Trash
procedure:
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- pick-up-tip: {pipette: left, labware: tiprack-200ul, well: A1}
- aspirate: {pipette: left, volume: 20, labware: 12-well-plate, well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: left, volume: 5, labware: 384-plate, well: O24, offsetFromBottomMm: 0.5}
- dispense: {pipette: left, volume: 5, labware: 384-plate, well: P24, offsetFromBottomMm: 0.5}
- blowout: {pipette: left, labware: Trash, well: A1}
- drop-tip: {pipette: left, labware: Trash, well: A1}
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